<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:commutator="clr-namespace:OpenEphys.Commutator;assembly=OpenEphys.Commutator"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Control an Open Ephys commutator by using rotation angle measurements.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.1S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RotationAxis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="commutator:QuaternionToTwist">
          <commutator:RotationAxis>
            <commutator:X>0</commutator:X>
            <commutator:Y>0</commutator:Y>
            <commutator:Z>1</commutator:Z>
          </commutator:RotationAxis>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{{turn : {0}}}</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="LedEnable" Description="If true, the commutator's LED will show status information. Otherwise, it will turn off." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>{led: true}</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>{led: false}</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName />
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="12" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="12" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source3" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>